OpenViBE-Scenario

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Reference channel
  Reference channel = 2
-> Channel selector
  Channels list = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Selection by index = false
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 3.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
-> Spatial filter => #5
  Spatial filter coefficients = 4 0 -1 0 -1 -1 0 0 -1 0 0 4 0 -1 0 0 -1 -1 0 -1
  Number of output channels = 2
  Number of input channels = 10
Input stream 1=#5, Input stream 2=#1.Output stream 2 -> Identity => #6
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #7
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
#7.Epoched signal -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #13
Input signal=#6.Output stream 1, Input stimulations=#6.Output stream 2 -> Stimulation based epoching => #14
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
#14.Epoched signal -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #20
Input stream 1=#13, Input stream 2=#20 -> Streamed matrix interlacer => #21
#1.Output stream 2 -> Identity => #22
Features=#21, Labels=#22 -> 0xc67a01dc Classifier trainer
  Classifier trainer to use = Linear Discrimimant Analysis (LDA)
  Filename to save configuration to = ${Path_Samples}/bci/motor-imagery/motor-imagery-bci-config-classifier.cfg
  Train trigger = OVTK_StimulationId_EndOfFile
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
