OpenViBE-Scenario

GDF file reader => #0
  Filename = ${Path_Samples}/signals/neurofeedback.gdf
  Samples per buffer = 32
Input stream 2=#0.EEG stream, Input stream 3=#0.Stimulations -> Identity => #1
#1.Output stream 2 -> Reference channel
  Reference channel = 0
-> Channel selector
  Channels list = Cz
  Selection by index = false
-> Temporal filter - GPL => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4.000000
  High cut frequency (Hz) = 45.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Crop
  Crop method = Min/Max
  Min crop value = 12.033257
  Max crop value = 40.740842
-> Simple DSP => #11
  Equation = x-26.387050
-> Analog VRPN server
  Peripheral name = openvibe-vrpn
Signal=#11 -> Signal display
  Time Scale = 100.000000
  Display Mode = Scan
Signal=#4, Stimulations=#1.Output stream 3 -> Signal display
  Time Scale = 10
  Display Mode = Scan

Acquisition client
  Acquisition server hostname = localhost
  Acquisition server port = 1024
