OpenViBE-Scenario

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-p300-speller.ov
#0.Output stream 2 -> Common Average Reference
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> Time based epoching
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
-> Identity => #5
Sequence stimulations=#0.Output stream 3, Target stimulations=#0.Output stream 4 -> P300 Speller Visualisation => #6
  Interface filename = ../share/openvibe-plugins/simple-visualisation/p300-speller.glade
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 40
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 40
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller-xDAWN/p300-speller-visualisation.cfg
Input signal=#5, Input stimulations=#6 -> Stimulation based epoching => #7
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
Stimulations=#0.Output stream 3, Session signal=#5, Evoked potential epochs=#7.Epoched signal -> xDAWN Spatial Filter Trainer
  Train stimulation = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Path_Samples}/bci/p300-speller-xDAWN/p300-spatial-filter.cfg
  Filter dimension = 3
  0xac367a9c = 10
#7.Epoched signal -> Epoch average => #9
  Averaging type = Moving epoch average
  Epoch count = 5
Signal=#9 -> Signal display
  Time Scale = 0.600000
  Display Mode = Scan
Input signal=#5, Input stimulations=#6 -> Stimulation based epoching
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
