OpenViBE-Scenario

Acquisition client
  Acquisition server hostname = openvibe
  Acquisition server port = 1024

Generic stream reader => #1
  Filename = ${Path_Samples}/signals/bci-p300-speller.ov
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2 -> Identity => #2
#2.Output stream 2 -> Reference channel
  Reference channel = 0
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 30.000000
  Pass band ripple (dB) = 0.500000
-> Channel selector => #5
  Channels list = Cz;Pz;Fz
  Selection by index = false
Keyboard stimulator
  Filename = ../share/openvibe-plugins/stimulation/simple-keyboard-to-stimulations.txt
-> P300 Speller Stimulator => #7
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 15
  Number of trials = 6
  Flash duration (in sec) = 0.075000
  No flash duration (in sec) = 0.125000
  Inter-repetition delay (in sec) = 2.000000
  Inter-trial delay (in sec) = 5.000000
  Avoid neighbor flashing = false
-> XML stimulation scenario player => #8
  Filename = ${Path_Samples}/bci/p300-speller/p300-speller-stimulations-targets.xml
-> XML stimulation scenario player
  Filename = ${Path_Samples}/bci/p300-speller/p300-speller-stimulations-finished.xml
Sequence stimulations=#7, Target stimulations=#8 -> 0xc67a01dc P300 Speller Visualisation => #10
  Interface filename = ../share/openvibe-plugins/simple-visualisation/p300-speller.glade
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 10,10,10
  Flash foreground color = 100,100,100
  Flash font size = 75
  No flash background color = 0,0,0
  No flash foreground color = 50,50,50
  No flash font size = 60
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 75
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 75
Input stream 1=#5, Input stream 2=#7, Input stream 3=#10 -> Identity => #11
Signal=#11.Output stream 1, Stimulations=#11.Output stream 2 -> Signal display
  Time Scale = 10.000000
  Display Mode = Scan
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2, Input stream 3=#7, Input stream 4=#8 -> Identity

Generic stream writer
  Filename = ${Path_Samples}/signals/bci-p300-speller-training.ov
  Use compression = true
