OpenViBE-Scenario

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-p300-speller.ov
Input stream 1=#0.Output stream 1, Input stream 2=#0.Output stream 2, Input stream 3=#0.Output stream 3, Input stream 4=#0.Output stream 4 -> Identity => #1
#1.Output stream 2 -> Reference channel
  Reference channel = 0
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 10.000000
  Pass band ripple (dB) = 0.500000
-> Channel selector => #4
  Channels list = Cz;Pz;Fz
  Selection by index = false
Signal=#4, Stimulations=#1.Output stream 3 -> Signal display
  Time Scale = 10
  Display Mode = Scan
#4 -> Spatial filter
  Spatial filter coefficients = -1 4 -1
  Number of output channels = 1
  Number of input channels = 3
-> Downsampling - GPL => #7
  New sampling rate (Hz) = 256
  Frequency cutoff ratio = 1/4
  Name of filter = Butterworth
  Filter order = 4
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller/p300-speller-config-downsampling.cfg
Sequence stimulations=#1.Output stream 3, Target stimulations=#1.Output stream 4 -> 0xc67a01dc P300 Speller Visualisation => #8
  Interface filename = ../share/openvibe-plugins/simple-visualisation/p300-speller.glade
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 10,10,10
  Flash foreground color = 100,100,100
  Flash font size = 75
  No flash background color = 0,0,0
  No flash foreground color = 50,50,50
  No flash font size = 60
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 75
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 75
Input stream 1=#7, Input stream 2=#8 -> Identity => #9
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #10
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.200000
  Stimulation to epoch from = OVTK_StimulationId_Target
#10.Epoched signal -> Epoch average => #11
  Averaging type = Epoch block average
  Epoch count = 15
Signal=#11 -> Target Signal Display
  Time Scale = 0.600000
  Display Mode = Scan
#10.Epoched signal -> Feature aggregator => #13
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #14
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.200000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#14.Epoched signal -> Epoch average => #15
  Averaging type = Epoch block average
  Epoch count = 15
Signal=#15 -> Non-target Signal Display
  Time Scale = 0.600000
  Display Mode = Scan
#14.Epoched signal -> Feature aggregator => #17
Stimulations=#1.Output stream 4, Features for class 1=#13, Features for class 2=#17 -> Multi-input Classifier trainer
  Classifier trainer to use = Linear Discrimimant Analysis (LDA)
  Filename to save configuration to = ${Path_Samples}/bci/p300-speller/p300-speller-config-classifier.cfg
  Train trigger = OVTK_StimulationId_Train
