OpenViBE-Scenario

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-p300-speller.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3, Input stream 3=#0.Output stream 4 -> Identity => #1
#1.Output stream 1 -> Reference channel
  Reference channel = 0
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 10.000000
  Pass band ripple (dB) = 0.500000
-> Channel selector
  Channels list = Cz;Pz;Fz
  Selection by index = false
-> Spatial filter
  Spatial filter coefficients = -1 4 -1
  Number of output channels = 1
  Number of input channels = 3
-> Downsampling - GPL => #6
  New sampling rate (Hz) = 256
  Frequency cutoff ratio = 1/4
  Name of filter = Butterworth
  Filter order = 4
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller/p300-speller-config-downsampling.cfg
Input stream 1=#6, Input stream 2=#1.Output stream 2 -> Identity => #7
Input stream 1=#7.Output stream 1, Input stream 2=#7.Output stream 2 -> Identity => #8
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching => #9
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.200000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#9.Epoched signal -> Feature aggregator
-> Classifier processor => #11
  Classifier processor to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/p300-speller/p300-speller-config-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller/p300-speller-config-classifier-processor.cfg
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching => #12
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.200000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#12.Epoched signal -> Feature aggregator
-> Classifier processor => #14
  Classifier processor to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = /home/yrenard/openvibe/dist/bin/../../p300-experiment/p300-experiment-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller/p300-speller-config-classifier-processor.cfg
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching => #15
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.200000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#15.Epoched signal -> Feature aggregator
-> Classifier processor => #17
  Classifier processor to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = /home/yrenard/openvibe/dist/bin/../../p300-experiment/p300-experiment-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller/p300-speller-config-classifier-processor.cfg
Input stream 1=#7.Output stream 1, Input stream 2=#7.Output stream 2 -> Identity => #18
Input signal=#18.Output stream 1, Input stimulations=#18.Output stream 2 -> Stimulation based epoching => #19
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.200000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#19.Epoched signal -> Feature aggregator
-> Classifier processor => #21
  Classifier processor to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = /home/yrenard/openvibe/dist/bin/../../p300-experiment/p300-experiment-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller/p300-speller-config-classifier-processor.cfg
Input signal=#18.Output stream 1, Input stimulations=#18.Output stream 2 -> Stimulation based epoching => #22
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.200000
  Stimulation to epoch from = OVTK_StimulationId_Label_05
#22.Epoched signal -> Feature aggregator
-> Classifier processor => #24
  Classifier processor to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = /home/yrenard/openvibe/dist/bin/../../p300-experiment/p300-experiment-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller/p300-speller-config-classifier-processor.cfg
Input signal=#18.Output stream 1, Input stimulations=#18.Output stream 2 -> Stimulation based epoching => #25
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.200000
  Stimulation to epoch from = OVTK_StimulationId_Label_06
#25.Epoched signal -> Feature aggregator
-> Classifier processor => #27
  Classifier processor to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = /home/yrenard/openvibe/dist/bin/../../p300-experiment/p300-experiment-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller/p300-speller-config-classifier-processor.cfg
Input stream 1=#11.Labels, Input stream 2=#14.Labels, Input stream 3=#17.Labels, Input stream 4=#21.Labels, Input stream 5=#24.Labels, Input stream 6=#27.Labels -> Identity => #28
Classification result 0=#28.Output stream 1, Classification result 1=#28.Output stream 2, Classification result 2=#28.Output stream 3, Classification result 3=#28.Output stream 4, Classification result 4=#28.Output stream 5, Classification result 5=#28.Output stream 6 -> Voting Classifier => #29
  Number of repetitions = 15
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
Input stream 1=#7.Output stream 1, Input stream 2=#7.Output stream 2 -> Identity => #30
Input signal=#30.Output stream 1, Input stimulations=#30.Output stream 2 -> Stimulation based epoching => #31
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.200000
  Stimulation to epoch from = OVTK_StimulationId_Label_07
#31.Epoched signal -> Feature aggregator
-> Classifier processor => #33
  Classifier processor to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = /home/yrenard/openvibe/dist/bin/../../p300-experiment/p300-experiment-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller/p300-speller-config-classifier-processor.cfg
Input signal=#30.Output stream 1, Input stimulations=#30.Output stream 2 -> Stimulation based epoching => #34
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.200000
  Stimulation to epoch from = OVTK_StimulationId_Label_08
#34.Epoched signal -> Feature aggregator
-> Classifier processor => #36
  Classifier processor to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = /home/yrenard/openvibe/dist/bin/../../p300-experiment/p300-experiment-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller/p300-speller-config-classifier-processor.cfg
Input signal=#30.Output stream 1, Input stimulations=#30.Output stream 2 -> Stimulation based epoching => #37
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.200000
  Stimulation to epoch from = OVTK_StimulationId_Label_09
#37.Epoched signal -> Feature aggregator
-> Classifier processor => #39
  Classifier processor to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = /home/yrenard/openvibe/dist/bin/../../p300-experiment/p300-experiment-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller/p300-speller-config-classifier-processor.cfg
Input stream 1=#7.Output stream 1, Input stream 2=#7.Output stream 2 -> Identity => #40
Input signal=#40.Output stream 1, Input stimulations=#40.Output stream 2 -> Stimulation based epoching => #41
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.200000
  Stimulation to epoch from = OVTK_StimulationId_Label_0A
#41.Epoched signal -> Feature aggregator
-> Classifier processor => #43
  Classifier processor to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = /home/yrenard/openvibe/dist/bin/../../p300-experiment/p300-experiment-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller/p300-speller-config-classifier-processor.cfg
Input signal=#40.Output stream 1, Input stimulations=#40.Output stream 2 -> Stimulation based epoching => #44
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.200000
  Stimulation to epoch from = OVTK_StimulationId_Label_0B
#44.Epoched signal -> Feature aggregator
-> Classifier processor => #46
  Classifier processor to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = /home/yrenard/openvibe/dist/bin/../../p300-experiment/p300-experiment-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller/p300-speller-config-classifier-processor.cfg
Input signal=#40.Output stream 1, Input stimulations=#40.Output stream 2 -> Stimulation based epoching => #47
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.200000
  Stimulation to epoch from = OVTK_StimulationId_Label_0C
#47.Epoched signal -> Feature aggregator
-> Classifier processor => #49
  Classifier processor to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = /home/yrenard/openvibe/dist/bin/../../p300-experiment/p300-experiment-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller/p300-speller-config-classifier-processor.cfg
Input stream 1=#33.Labels, Input stream 2=#36.Labels, Input stream 3=#39.Labels, Input stream 4=#43.Labels, Input stream 5=#46.Labels, Input stream 6=#49.Labels -> Identity => #50
Classification result 0=#50.Output stream 1, Classification result 1=#50.Output stream 2, Classification result 2=#50.Output stream 3, Classification result 3=#50.Output stream 4, Classification result 4=#50.Output stream 5, Classification result 5=#50.Output stream 6 -> Voting Classifier => #51
  Number of repetitions = 15
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_07
Input stream 1=#1.Output stream 2, Input stream 2=#1.Output stream 3 -> Identity => #52
Input stream 1=#52.Output stream 1, Input stream 2=#52.Output stream 2 -> Identity => #53
Sequence stimulations=#53.Output stream 1, Target stimulations=#53.Output stream 2, Row selection stimulations=#29, Column selection stimulations=#51 -> 0xc67a01dc P300 Speller Visualisation
  Interface filename = ../share/openvibe-plugins/simple-visualisation/p300-speller.glade
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 10,10,10
  Flash foreground color = 100,100,100
  Flash font size = 75
  No flash background color = 0,0,0
  No flash foreground color = 50,50,50
  No flash font size = 60
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 75
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 75
