OpenViBE-Scenario

Generic stream reader
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
-> Reference channel
  Reference channel = 2
-> 0xc67a01dc Temporal filter - GPL => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 128.000000
  Pass band ripple (dB) = 0.500000
Signal=#2 -> Signal display
  Time Scale = 10
  Display Mode = Scan
#2 -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Spectral analysis - GPL => #5
  Spectral components = Amplitude
#5.Amplitude -> Power spectrum display
  Minimum frequency to display = 0.000000
  Maximum frequency to display = 50.000000
