OpenViBE-Scenario

Generic stream reader
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
-> Reference channel
  Reference channel = 2
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 128.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Spectral analysis - GPL => #4
  Spectral components = Amplitude
#4.Amplitude -> Time-frequency map display
  Time Scale = 10
  Minimum frequency to display = 0
  Maximum frequency to display = 40
#4.Amplitude -> Power spectrum display
  Minimum frequency to display = 0
  Maximum frequency to display = 40
