OpenViBE-Scenario

GDF file reader => #0
  Filename = ${Path_Samples}/signals/real-hand-movements.gdf
  Samples per buffer = 32
#0.EEG stream -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> 0xc67a01dc Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Epoch average => #6
  Averaging type = Moving epoch average
  Epoch count = 10
Electrode localisation file reader => #7
  Filename = ../share/electrode_sets/electrode_set_standard_cartesian.txt
Signal=#6, Channel localization=#7 -> 2D topographic map
  Interpolation type = Spline (potentials)
  Delay (in s) = 0.000000
Signal=#6, Channel localisation=#7 -> 3D topographic map
  Interpolation type = 1
  Delay (in s) = 0
  Face mesh filename = face
  Scalp mesh filename = scalp
  Sphere projection mesh filename = projection_center
