OpenViBE-Scenario

GDF file reader => #0
  Filename = ${Path_Samples}/signals/voxel-display.gdf
  Samples per buffer = 10
#0.EEG stream -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.125000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> 0xc67a01dc Epoch average
  Averaging type = Moving epoch average
  Epoch count = 8
-> Spatial filter
  Spatial filter coefficients = 0
  Number of output channels = 0
  Number of input channels = 0
  0x8d21ff41 = ${Path_Samples}/box-tutorials/voxel-display-settings-file.txt
-> Voxel visualizer
  Voxels filename = ${Path_Root}/share/openvibe-plugins/simple-visualisation/voxeldisplay/voxel_set_2394.txt
