OpenViBE-Scenario
0x790d75b8 = Yann Renad / Fabien Lotte
0x9f5c4075 = File Replay
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario allows to quickly replay
  an online session recorded file, and watch the corresponding
  feedback using the handball vr-demo.
  This scenario is based on motor-imagery-bci-4-replay.
  It uses VRPN servers to communicate with the handball application.

  Note: refer to scenario motor-imagery-3-online for
  details about the processing.
Comment
  Please note that the feedback is starting near 40'

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Reference channel
  Reference channel = 2
-> Channel selector
  Channels list = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Selection by index = false
-> 0xc67a01dc Spatial Filter "Surface Laplacian"
  Spatial Fitler Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #11
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/motor-imagery/motor-imagery-bci-config-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
#11.Classification state -> Analog VRPN server
  Peripheral name = openvibe-vrpn
Stimulations=#1.Output stream 2, Amplitude=#11.Classification state -> Graz visualization
  Show instruction = true
  Show feedback = true
Input 1=#1.Output stream 2, Input 2=#1.Output stream 2, Input 3=#1.Output stream 2, Input 4=#1.Output stream 2, Input 5=#1.Output stream 2, Input 6=#1.Output stream 2 -> Button VRPN server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_GDF_Start_Of_Trial
  Button 1 OFF = OVTK_GDF_Feedback_Continuous
  Button 2 ON = OVTK_GDF_Feedback_Continuous
  Button 2 OFF = OVTK_GDF_End_Of_Trial
  Button 3 ON = OVTK_GDF_End_Of_Trial
  Button 3 OFF = OVTK_GDF_Start_Of_Trial
  Button 4 ON = OVTK_GDF_Left
  Button 4 OFF = OVTK_GDF_End_Of_Trial
  Button 5 ON = OVTK_GDF_Right
  Button 5 OFF = OVTK_GDF_End_Of_Trial
  Button 6 ON = OVTK_GDF_Cue_Unknown_Undefined
  Button 6 OFF = OVTK_GDF_End_Of_Trial
