OpenViBE-Scenario
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The preprocessing of this scenario consists
  in re-referencing all the channels to the
  channel 2 (which was located on the nose) and
  to select the 10 channels over the motor cortex
  of the hands. The Spatial Filter box computes
  a surface laplacian filter and reduces the output
  to two channels: one on the left and one on the right.

  note: depending on your acquisition device,
  you may have to tune this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  Overview

  This scenario can be used online once the
  classifiers is trained.

  note: the recorded files go to the
  ${Path_Samples}/signals folder.
Comment
  Then comes the feature extraction part.

  The signal is filtered in the alpha/beta [8 24] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visulization
  box for feedback !

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
XML stimulation scenario player => #1
  Filename = ../share/openvibe-plugins/stimulation/graz_stimulation_scenario.xml
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal strea, Input stream 3=#1 -> Identity => #2
Input stream 1=#2.Output stream 2, Input stream 2=#2.Output stream 3 -> Identity => #3
#3.Output stream 1 -> Reference channel
  Reference channel = 2
-> Channel selector
  Channels list = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Selection by index = false
-> 0xc67a01dc Spatial Filter "Surface Laplacian"
  Spatial Fitler Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #13
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/motor-imagery/motor-imagery-bci-config-classifier.cfg
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
Stimulations=#3.Output stream 2, Amplitude=#13.Classification state -> Graz visualization
  Show instruction = true
  Show feedback = true
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2, Input stream 3=#2.Output stream 3 -> Generic stream writer
  Filename = ${Path_Samples}/signals/record-[$core{date}-$core{time}].ov
  Use compression = true
