OpenViBE-Scenario

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-p300-speller.ov
#0.Output stream 2 -> Channel Selector
  Channel List = Cz;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #3
  Decimation factor = 4
Sequence stimulations=#0.Output stream 3, Target stimulations=#0.Output stream 4 -> P300 Speller Visualisation => #4
  Interface filename = ../share/openvibe-plugins/simple-visualisation/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 40
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 40
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller/p300-speller-visualisation.cfg
Input signal=#3, Input stimulations=#4 -> Stimulation based epoching => #5
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#5.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller/p300-epoch-average.cfg
-> Feature aggregator => #7
Input signal=#3, Input stimulations=#4 -> Stimulation based epoching => #8
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#8.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Path_Samples}/bci/p300-speller/p300-epoch-average.cfg
-> Feature aggregator => #10
Stimulations=#0.Output stream 4, Features for class 1=#7, Features for class 2=#10 -> Classifier trainer
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to save configuration to = ${Path_Samples}/bci/p300-speller/p300-classifier.cfg
  Train trigger = OVTK_StimulationId_Train
  Number of partitions for k-fold test = 12
  Target class index for TP and FP rates = 1
-> 0xc67a01dc Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
