OpenViBE-Scenario
0x790d75b8 = Jozef Legény
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP Acquisition Test
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Acquisition test

  Scenario used for testing data acquisition. The signal quality should
  always be checked before training.

  You can monitor signals from electrodes used by SSVEP scenarios :
  CPz, POz, Oz, Iz, O1 and O2. Individual signals are shown for each
  channel, as well as output of the two spatial filters used and the FFT
  of the average of all channels.
Comment
  Display the signal from
  all useful channels for SSVEP
Comment
  Display the result of the
  bipolar spatial filter
Comment
  Display the result of the
  laplacian spatial filter

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Channel Selector => #1
  Channel List = CPz;POz;Oz;Iz;O1;O2
  Action = Select
  Channel Matching Method = Smart
Input stream 1=#1 -> Identity => #2
#2.Output stream 1 -> 0xc67a01dc Channel Selector
  Channel List = CPz;POz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "CPz - POz" => #4
  Spatial filter coefficients = 1;-1
  Number of output channels = 1
  Number of input channels = 2
Signal=#4 -> Signal display "Bipolar Display"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#2.Output stream 1 -> 0xc67a01dc Channel Selector
  Channel List = Oz;O1;O2;POz;Iz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "4 x Oz - (O1 + O2 + POz + Iz)" => #7
  Spatial filter coefficients = 4;-1;-1;-1;-1
  Number of output channels = 1
  Number of input channels = 5
Signal=#7 -> Signal display "Laplacian Display"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#2.Output stream 1 -> Signal display "Channel Display"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#2.Output stream 1 -> Spatial Filter "Average"
  Spatial filter coefficients = 1;1;1;1;1;1
  Number of output channels = 1
  Number of input channels = 6
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 2.000000
  Epoch 1 intervals (in sec) = 0.500000
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Spectral analysis - GPL => #14
  Spectral components = Amplitude
#14.Amplitude -> FFT of average signal
  Minimum frequency to display = 0
  Maximum frequency to display = 40
