OpenViBE-Scenario
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  External Stimulator

  This SSVEP scenario needs to run along with
  an external application. The application is run
  automatically after the start of the scenario.

  The stimulator accepts two keyboard commands:

  Pressing <Space> will send a start
  stimulation to the scenario and the experiment will
  begin.

  Pressing <Escape> will quit the
  stimulator and stop the scenario.
Comment
  Scenario description

  This is the online testing scenario. You can use it to evaluate the
  classifiers trained in the previous step.

  Important :You will have to run the
  Classifier training scenario at least one in order to use the
  online testing application.

  Game rules

  The game is a simple shooter. You control a representation of a ship and
  your goal is to shoot at the appearing targets. There are three possible
  controls Turn clockwise, Turn counter-clockwise and
  Shoot corresponding to left, right and front flickering form.
Comment
  Game Configuration

  There are two settings that you can change in this scenario:

  Target sequence : a list of positions on which the targets will
  appear. Each position is represented by a number from 0 to 7, representing
  the angle of the target.

  Ship angular speed : the angle (in radians) by which the ship will
  rotate every time it receives a command.
Comment
  Configurable box
Comment
  Signal processing for the second stimulation frequency
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the third stimulation frequency

Start Stimulation
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/start-stimulator.lua
  Delay = 1
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = ${External_Application_Launcher} ssvep-demo-shooter

VRPN Target Request
  Peripheral name = SSVEP_VRPN_TargetRequest@localhost:${VRPN_ExternalServerPort}
  Button 1 ON = OVTK_StimulationId_Target
  Button 1 OFF = OVTK_StimulationId_NonTarget
-> SSVEP Shooter Controller => #3
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/shooter-controller.lua
  Target Sequence = 0 3 5 7 2 6 4 1
  Ship Angular Speed = 0.01
Input 1=#3, Input 2=#3, Input 3=#3, Input 4=#3, Input 5=#3, Input 6=#3, Input 7=#3, Input 8=#3 -> Button VRPN Server "VRPN Target Command"
  Peripheral name = SSVEP_VRPN_ShooterTarget
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
  Button 4 ON = OVTK_StimulationId_Label_03
  Button 4 OFF = OVTK_StimulationId_Label_03
  Button 5 ON = OVTK_StimulationId_Label_04
  Button 5 OFF = OVTK_StimulationId_Label_04
  Button 6 ON = OVTK_StimulationId_Label_05
  Button 6 OFF = OVTK_StimulationId_Label_05
  Button 7 ON = OVTK_StimulationId_Label_06
  Button 7 OFF = OVTK_StimulationId_Label_06
  Button 8 ON = OVTK_StimulationId_Label_07
  Button 8 OFF = OVTK_StimulationId_Label_07
Scenario Control => #5
  Peripheral name = SSVEP_VRPN_StartStop@localhost:${VRPN_ExternalServerPort}
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
#5.Output 1 -> Button Simplifier
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/shooter-button-simplifier.lua
-> Identity => #7
Input stimulations 1=#7, Input stimulations 2=#3 -> Stimulation multiplexer => #8
Input 1=#7, Input 2=#8, Input 3=#7, Input 4=#7 -> Button VRPN Server "Stimulator Control"
  Peripheral name = SSVEP_VRPN_StimulatorControl
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
  Button 3 ON = OVTK_StimulationId_VisualStimulationStart
  Button 3 OFF = OVTK_StimulationId_VisualStimulationStart
  Button 4 ON = OVTK_StimulationId_VisualStimulationStop
  Button 4 OFF = OVTK_StimulationId_VisualStimulationStop
#5.Output 2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop

Acquisition client => #11
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#11.Signal strea -> Identity => #12
-> Channel Selector
  Channel List = CPz;POz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "CPz - POz" => #14
  Spatial filter coefficients = 1;-1
  Number of output channels = 1
  Number of input channels = 2
#12 -> 0xc67a01dc Channel Selector
  Channel List = Oz;O1;O2;POz;Iz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "4 x Oz - (O1 + O2 + POz + Iz)" => #16
  Spatial filter coefficients = 4;-1;-1;-1;-1
  Number of output channels = 1
  Number of input channels = 5
Input Signal 1=#14, Input Signal 2=#16 -> Signal Merger
-> Channel Rename => #18
  New channel names = Bipolar;Laplacian
-> Identity
-> Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/temporal-filter-freq-1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #26
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/ssvep/classifiers/classifier-1
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
#18 -> Identity
-> Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/temporal-filter-freq-2.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #34
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/ssvep/classifiers/classifier-2
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
#18 -> Identity
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/temporal-filter-freq-3.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #42
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/ssvep/classifiers/classifier-3
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
New input[0]=#26.Labels, New input[1]=#34.Labels, New input[2]=#42.Labels -> SSVEP Voter => #43
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/shooter-combination-classifier.lua
  Class count = 3
Input 1=#43, Input 2=#43, Input 3=#43 -> Button VRPN Server "VRPN Ship Control"
  Peripheral name = SSVEP_VRPN_ShipControl
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
