OpenViBE-Scenario
Comment
  The Sinus Oscillator box generates
  a 4 channels sinusoidal signal
Comment
  Those 4 channels are displayed with the left
  Signal Display box
Comment
  The Channel Selector box takes only
  the first and fourth channels
  (channel names are 0 indexed)
Comment
  Finally, the right Signal Display box
  displays the 2 selected channels
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Sinus oscillator => #0
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
Signal=#0 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#0 -> Channel selector => #2
  Channels list = 0;3
  Selection by index = true
Signal=#2 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
