OpenViBE-Scenario

Time signal => #0
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP : t => #1
  Equation = X
Signal=#1 -> Signal display : t
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#0 -> Simple DSP : t^3 => #3
  Equation = X*X*X
Signal=#3 -> Signal display : t^3
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#0 -> Simple DSP : cos(t)+sin(t) => #5
  Equation = cos(X) + sin(X)
Signal=#5 -> Signal display : cos(t)+sin(t)
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
