OpenViBE-Scenario
Comment
  The Lua Stimulator box delays muxes the stimulations
  from the Clock Stimulator and the Keyboard Stimulator
  boxes. Each muxed stimulation is delayed by 5 seconds.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Time signal => #0
  Sampling frequency = 512
  Generated epoch sample count = 32
Clock stimulator => #1
  Interstimulation interval (in sec) = 1.0
  Stimulation = OVTK_StimulationId_Label_00
Keyboard stimulator => #2
  Filename = ${Path_Data}/openvibe-plugins/stimulation/simple-keyboard-to-stimulations.txt
New input[0]=#1, New input[1]=#2 -> Mux + 5s delay => #3
  Lua Script = ${Path_Data}/openvibe-plugins/stimulation/sample-lua-script.lua
Signal=#0, Stimulations=#3 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
