OpenViBE-Scenario
Comment
  You can browse each box' documentation by selecting the box and pressing F1

  The documentation page for this tutorial is available at:
  openvibe.inria.fr/tutorial-using-matlab-with-openvibe
Comment
  Configure the Matlab Scripting box:

   Set the matlab installation directory
  and working directory before use !

  You can select the number of channels
   and size of data chunk.
  Sampling frequency = box clock freqeuncy * samples per block

  The box generates one sinus signal per channel
  with frequency
  F(channel i) = 10 * i Hz

  The box sends one stimulation per second

0xc67a01dc Tuto3 : sinus generator => #0
  Box clock frequency in Hz = 32
  Path to Matlab Executables = C:/Program Files/MATLAB/R2011a/bin/win32
  Matlab working directory = C:/Program Files/openvibe/share/openvibe-scenarios/box-tutorials/matlab/
  Initialize function = tuto3_sinus_generator_Initialize
  Process function = tuto3_sinus_generator_Process
  Uninitialize function = tuto3_sinus_generator_Uninitialize
  Channel count = 4
  Samples per buffer = 16
  Amplitude = 5
  Stimulation = OVTK_StimulationId_Label_01
Signal=#0.Filtered Signal, Stimulations=#0.Stimulation -> Signal display
  Time Scale = 2
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
