OpenViBE-Scenario
Comment
  The Acquisition Client box
  receives data from the OpenViBE acquisition
  server. You should have the OpenViBE
  acquisition server started and acquiring to
  let this scenario work correctly. In case
  of connection errors, you should read a
  message in the console.
Comment
  The Signal Display box display the
  acquired data.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Acquisition client => #0
  Acquisition server hostname = localhost
  Acquisition server port = 1024
Signal=#0.Signal stream, Stimulations=#0.Stimulations -> 0xc67a01dc Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
