OpenViBE-Scenario
Comment
  The Generic Stream Reader box
  reads an OpenViBE file containing signals.
Comment
  Each channel is referenced against
  channel 2 (which was recorded on the nose
  in the demonstrated file) thanks to the
  Reference Channel box.
Comment
  The Signal Display
  box is just present to
  monitor the input of
  the spectrum
  computation pipeline.

  The Window Manager
  is used to organize the
  two windows correctly !
Comment
  Then the Temporal Filter box
  filters the signal in the [1 128] Hz range.
Comment
  The Time Based Epoching box
  splits the signals in blocks of 1 seconds every
  16th of second. This is a moving window.
Comment
  An FFT is applied on each window thanks to the
  Spectral Analisys box.
Comment
  Finally, the Power Spectrum Display
  displays the resuling spectrum.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Generic stream reader
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
-> Reference channel
  Reference channel = 2
-> Temporal filter - GPL => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 128.000000
  Pass band ripple (dB) = 0.500000
Signal=#2 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#2 -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Spectral analysis - GPL => #5
  Spectral components = Amplitude
#5.Amplitude -> Power spectrum display
  Minimum frequency to display = 0.000000
  Maximum frequency to display = 50.000000
