OpenViBE-Scenario
Comment
  Do not forget to look at the python scripts used
  in all of the python boxes in this scenario.
Comment
  This scenario illustrates several user cases of the Python Scripting Box

  Three boxes are used:

  - Sinus generator : generates signal
  - Clock stimulator : generates stimulations
  - Mean : transforms signal
Comment
  Sinus generator

  This script generates a sine wave.
Comment
  Mean

  This script calculates the mean of
  all of the channels in a signal.

  It describes the use of the
  numpy python library.
Comment
  Spectra are displayed to better compare the generated results
Comment
  Clock stimulator

  This script generates stimulations
  every time it is triggered.

  It illustrates the use of
  Clock Frequency parameter.

Sinus generator => #0
  Clock frequency (Hz) = 16
  Script = ${Path_Samples}/box-tutorials/python/scripts/python-sinus-oscillator.py
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Mean => #1
  Clock frequency (Hz) = 60
  Script = ${Path_Samples}/box-tutorials/python/scripts/python-signal-average.py
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> Spectral analysis - GPL => #3
  Spectral components = Amplitude
#3.Amplitude -> Power spectrum display
  Minimum frequency to display = 0
  Maximum frequency to display = 40
Signal=#1 -> Signal display "Mean"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#0 -> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> Spectral analysis - GPL => #7
  Spectral components = Amplitude
#7.Amplitude -> Power spectrum display
  Minimum frequency to display = 0
  Maximum frequency to display = 40
Clock stimulator => #9
  Clock frequency (Hz) = 1
  Script = ${Path_Samples}/box-tutorials/python/scripts/python-clock-stimulator.py
  Stimulation = OVTK_StimulationId_Label_00
-> EBML stream spy
  EBML nodes description = ../share/openvibe-plugins/tools/config-ebml-stream-spy.txt
  Log level to use = Fatal error
  Expand binray blocks = false
  Number of values in expanded blocks = 4
Signal=#0, Stimulations=#9 -> Signal display "Sinus"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
