OpenViBE-Scenario
Comment
  The Simple DSP box performs
  simple computations on input matrix
  These computations can be logical or
  arithmetical.
Comment
  The Time signal is a sample box
  that generates a constant increasing signal
Comment
  if-then-else clause
  can be achieved using
  COND ? output-true : output-false
Comment
  You can use the letter 'X' (or 'x')
   for the first input.

  You can use up to 16 inputs.
  If you are using more than 1 input
  You have to use the letters a to n
  for inputs 1 to 16 respectively.
Comment
  Some simple DSPs using only one input signal
  to perform mathematical operations
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Time signal => #0
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP "y = cos(x)" => #1
  Equation = cos(X)
Signal=#1 -> Signal display "Display: y = cos(x)"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#0 -> Simple DSP "y = sin(x)" => #3
  Equation = sin(X)
Signal=#3 -> Signal display "Display: y = sin(x)"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Input - A=#1, Input - B=#3 -> Simple DSP "DSP: a > b ? a : b" => #5
  Equation = a>b?a:b
Signal=#5 -> Signal display "Display: y = MAX(cos(x), sin(x))"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Input - A=#1, Input - B=#3 -> Simple DSP "DSP: a/b" => #7
  Equation = b/a
Signal=#7 -> Signal display "Display: y = sin(x)/cos(x)"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#0 -> Simple DSP "y = x" => #9
  Equation = x
Signal=#9 -> Signal display "Display: y = x"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#0 -> Simple DSP "y = x³" => #11
  Equation = pow(x,3)
Signal=#11 -> Signal display "Display: y = x³"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#0 -> Simple DSP "y = cos(x) + sin(x)" => #13
  Equation = cos(x)/(x+1)
Signal=#13 -> Signal display "Display: y = cos(x) + sin(x)"
  Time Scale = 100.000000
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100.000000
