OpenViBE-Scenario
Comment
  The Stream Switch box
  redirects the Streamed Matrix input on a particular output.

  The Stimulation input drives the switch according to
  the settings (one stimulation code per output).
Comment
  The Signal Display boxes display
  the simulated signal.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Keyboard stimulator => #0
  Filename = ${Path_Data}/openvibe-plugins/stimulation/simple-keyboard-to-stimulations.txt
Sinus oscillator => #1
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
Triggers=#0, Matrix=#1 -> 0xc67a01dc Stream Switch => #2
  Switch stim for output 0 = OVTK_StimulationId_Label_01
  Switch stim for output 1 = OVTK_StimulationId_Label_02
  Switch stim for output 2 = OVTK_StimulationId_Label_03
Signal=#2.Output[0] -> Signal display "Press 'a' to display here"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#2.Output[1] -> Signal display "Press 'z' to display here"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#2.New output -> Signal display "Press 'e' to display here"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
