OpenViBE-Scenario

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Reference channel
  Reference channel = 0
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> 0xc67a01dc Epoch average => #6
  Averaging type = Moving epoch average
  Epoch count = 5
Electrode localisation file reader => #7
  Filename = ../share/electrode_sets/electrode_set_standard_cartesian.txt
Signal=#6, Channel localization=#7 -> 2D topographic map
  Interpolation type = Spline (potentials)
  Delay (in s) = 0.000000
Signal=#6, Channel localisation=#7 -> 3D topographic map
  Interpolation type = 1
  Delay (in s) = 0
  Face mesh filename = face
  Scalp mesh filename = scalp
  Sphere projection mesh filename = projection_center
