OpenViBE-Scenario
0x790d75b8 = Yann Renard
0x9f5c4075 = Signal Monitoring
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The Temporal Filter
  box transform the signal
  so you can see what is actually
  used online.
Comment
  Overview

  This scenario can be used in order
  to check the quality of the signals
  before starting an experiment.

  One should definitely
  check the quality of the signals
  and ensure that :

  - eye blinks are visible
  - jaw clenching are visible
  - alpha waves are visible when closing eyes

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
Input stream 1=#1, Input stream 2=#0.Signal strea, Input stream 3=#0.Stimulations -> Identity => #2
  0xac367a9c = 6
Signal=#2.Output stream 1, Stimulations=#2.Output stream 3 -> Signal display "filtered signals"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#2.Output stream 2, Stimulations=#2.Output stream 3 -> Signal display "raw signals"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
