OpenViBE-Scenario
Comment
  You can browse each box' documentation by selecting the box and pressing F1

  The documentation page for this tutorial is available at:
  openvibe.inria.fr/tutorial-using-matlab-with-openvibe
Comment
  Configure the Matlab Scripting box:

   Set the matlab installation directory before use !

  Enter the path to your local Matlab installation.

  You can choose the Stimulation trigger
  that will set all input samples to 0

0xc67a01dc Sinus oscillator => #0
  Channel count = 2
  Sampling frequency = 512
  Generated epoch sample count = 16
Signal=#0 -> Signal display "Raw Signal"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Press 'a' to set all samples to 0 => #2
  Filename = ${Path_Data}/openvibe-plugins/stimulation/simple-keyboard-to-stimulations.txt
Signal input=#0, Trigger=#2 -> Signal filter => #3
  Box clock frequency in Hz = 32
  Path to Matlab Executables = C:/Program Files/MATLAB/R2011a/bin/win32
  Matlab working directory = C:/Program Files/openvibe/share/openvibe-scenarios/box-tutorials/matlab/
  Initialize function = tuto1_signal_filter_Initialize
  Process function = tuto1_signal_filter_Process
  Uninitialize function = tuto1_signal_filter_Uninitialize
  Zero trigger = OVTK_StimulationId_Label_01
Signal=#3 -> Signal display "Matlab output"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
