OpenViBE-Scenario
Comment
  The Keyboard Stimulator box
  sends a defined stimulation when pressing a key.
Comment
  The Sound Player box
  plays and stop a sound acoording to stimulation triggers.
  The sound can be in OGG or WAV format.

  When the sound file stops,
  the stimulation OVTK_StimulationId_EndOfFile is outputed
Comment
  The Stimulation Listener box
  prints the incoming stimulation i the console.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Keyboard stimulator
  Filename = ${Path_Data}/openvibe-plugins/stimulation/simple-keyboard-to-stimulations.txt
-> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger = OVTK_StimulationId_Label_02
  File to play = ${Path_Data}/openvibe-plugins/stimulation/ov_beep.wav
  Loop = false
-> Stimulation listener
  Log level to use = Information
