OpenViBE-Scenario
Comment
  You can browse each box' documentation by selecting the box and pressing F1

  The documentation page for this tutorial is available at:
  openvibe.inria.fr/tutorial-using-matlab-with-openvibe
Comment
  We extract a 2 seconds window
  every 2 seconds
Comment
  Configure the Matlab Scripting box:

   Set the matlab installation directory
  and working directory before use !

  If you want to add a sinusoid noise to the signal
  set the noise frequency and amplitude.
  Amplitude to 0 results in no noise.

  Set the frequency range for the plot scale.
Comment
  The signal display boxes prints
  on a 2 seconds horizontal scale

Generic stream reader
  Filename = ${Path_Samples}/signals/bci-ssvep-training.ov
-> Channel Selector => #1
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 2
-> 0xc67a01dc Tuto2 : FFT => #3
  Box clock frequency in Hz = 32
  Path to Matlab Executables = C:/Program Files/MATLAB/R2011a/bin/win32
  Matlab working directory = C:/Program Files/openvibe/share/openvibe-scenarios/box-tutorials/matlab/
  Initialize function = tuto2_FFT_filter_Initialize
  Process function = tuto2_FFT_filter_Process
  Uninitialize function = tuto2_FFT_filter_Uninitialize
  Noise frequency = 20
  Noise amplitude = 10
  Plot range : min frequency = 5
  Plot range : max frequency = 50
Signal=#3 -> Signal display "Corrupted signal"
  Time Scale = 2
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#1 -> Signal display "Raw signal"
  Time Scale = 2
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
