OpenViBE-Scenario
Comment
  The Generic Stream Reader box
  reads an OpenViBE file from disk and sends
  its content to the following box.
  The OpenViBE file format can store any
  stream of the OpenViBE platform into a file.
Comment
  The Signal Display box displays
  the content of the file.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

0xc67a01dc Generic stream reader => #0
  Filename = C:/jl/ov_gs/openvibe-scenarios/trunc/share/openvibe-scenarios/signals/bci-motor-imagery.ov
Signal=#0.Output stream 2, Stimulations=#0.Output stream 3 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
